PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotionalMovieTask
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      text = These are instructions
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(_thisDir)
  Routine MoviePresent
    VariableComponent customColor
      startExpValue = [-1, -1, -1]
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if customColor[0] == -1:
            customColor = [1, 1, 1]
        else:
             customColor = [-1, -1, -1]
    CodeComponent filePathHandler
      Code Type = Auto->JS
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      Begin Routine:
        fullFilePath = os.path.join(_thisDir,
                                'resources', 'vids',
                                 fileName)
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $fullFilePath
      size = (0.8, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    PolygonComponent constantBlack
      fillColor = [-1, -1, -1]
      lineColor = [-1, -1, -1]
      pos = (-.4, .4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    PolygonComponent polygon
      fillColor [set every repeat] = [1,1,1]
      pos = (-.4, .4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = configFile1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('fileName', '782-Close_up_Cleaning_Hands_Using_Hand_Sanitizer-ED.mp4'), ('vidLen', 14.028), ('valence', 5.0), ('arousal', 3.4167), ('impact', 3.3333), ('group', 'neut')]),
      OrderedDict([('fileName', '831-Close_Up_Bow_Playing_Violin-ED.mp4'), ('vidLen', 15.073), ('valence', 5.5), ('arousal', 3.037), ('impact', 3.1538), ('group', 'neut')]),
      OrderedDict([('fileName', '646-Woman_Crocheting-ED.mp4'), ('vidLen', 7.811), ('valence', 5.3077), ('arousal', 3.4643), ('impact', 3.0263), ('group', 'neut')]),
      OrderedDict([('fileName', '685.22-Romantic_Happy_Couple_Showing_Love-ED.mp4'), ('vidLen', 9.967), ('valence', 5.913), ('arousal', 2.7143), ('impact', 2.05), ('group', 'neut')]),
      OrderedDict([('fileName', '641.1-Free_Couple_Holding_Hands-ED.mp4'), ('vidLen', 12.539), ('valence', 6.4286), ('arousal', 3.2), ('impact', 3.2821), ('group', 'neut')]),
      OrderedDict([('fileName', '652.1-Woman_In_A_Photocopier-ED.mp4'), ('vidLen', 10.032), ('valence', 4.3125), ('arousal', 2.7805), ('impact', 1.875), ('group', 'neut')]),
      OrderedDict([('fileName', '872-A_Woman_In_Wheelchair_Pushes_Herself_With_A_Laptop_On_Her_Lap-ED.mp4'), ('vidLen', 10.371), ('valence', 5.4167), ('arousal', 3.5429), ('impact', 3.8919), ('group', 'neut')]),
      OrderedDict([('fileName', '746.2-Person_Slicing_A_Yellow_Bell_Pepper-ED.mp4'), ('vidLen', 9.167), ('valence', 5.7083), ('arousal', 2.7391), ('impact', 2.1034), ('group', 'neut')])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
    Routine MoviePresent
  LoopTerminator trials
